PsychoPy2experiment version="2020.1.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ap1
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Routines
  Routine trial
  Routine AR_W
    ImageComponent AR_Wait
      image = plus.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine AR
    ImageComponent AR_Image
      image [set every repeat] = $Image_Name
      size = (1.25, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent AR_Key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine TR
    KeyboardComponent TR_Key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent TR_Image
      image [set every repeat] = $Image_Name
      size = (1.25, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine TR_W
    ImageComponent TR_Wait
      image = plus.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Trial_Instructions
    TextComponent TR_Instructions
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $TInstructions
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Actual_Instructions
    TextComponent AR_Instructions
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $AInstructions
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent EndText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        The Experiment has ended
        Press Space Bar to Exit
    KeyboardComponent EndKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Type_Group
    KeyboardComponent Input_Group
      allowedKeys = 'A','a','B','b','C','c','return','backspace','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent Fed_Text
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text [set every frame] = $inst+"\n"+$screen_text+"\n"+"Press spacebar to continue"
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    CodeComponent FeedCode
      Code Type = Auto->JS
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      Begin Routine:
        screen_text=""
        inst="Choose your group it is either a,b or c"
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        print(keys)
        if("backspace" in keys):
            if(len(screen_text)>0):
                screen_text=screen_text[:-1]
        elif("space" in keys):
            continueRoutine=False
        else:
            if(len(keys)>0):
                if(keys[-1]=="A" or keys[-1]=="B" or keys[-1]=="C" or keys[-1]=="a" or keys[-1]=="b" or keys[-1]=="c"):
                    screen_text=keys[-1]
      End Routine:
        if(len(screen_text)!=1):
            screen_text="A"
        else:
            if(not(screen_text=="A" or screen_text=="B" or screen_text=="C" or screen_text=="a" or screen_text=="b" or screen_text=="c")):
                screen_text="A"
Flow
  Routine Type_Group
  LoopInitiator L1 loopType="TrialHandler"
    conditionsFile = "Group"+$screen_text+".xlsx"
    loopType = sequential
    nReps = 2
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    Routine Trial_Instructions
    LoopInitiator L2 loopType="TrialHandler"
      conditionsFile = $Trial_Name
      loopType = random
      nReps = 1
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      Routine TR
      Routine TR_W
    LoopTerminator L2
    Routine Actual_Instructions
    LoopInitiator L3 loopType="TrialHandler"
      conditionsFile = $Actual_Name
      loopType = random
      nReps = 1
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      Routine AR
      Routine AR_W
    LoopTerminator L3
  LoopTerminator L1
  Routine End
