PsychoPy2experiment version="2020.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = try1
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Routines
  Routine trial
  Routine Instructions
    TextComponent Instructions_Text
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Experiment: Influence of emotional information in biasing performance

        Task: Go and Nogo Tasks

        Instructions:
        1.Press Space Bar when Target stimuli appears
        2.Do not press a key when Non-Target stimuli appears

        3.There will be three runs in the experiment

        Press Space Bar to continue
    KeyboardComponent Instructions_Key_Next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Run1
    ImageComponent face1
      image [set every repeat] = $Image_Name
      size = (2,1.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent run_time_key
      allowedKeys = 'space'
      correctAns = $Correct_Answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Wait1
    ImageComponent ISI
      image = plus.png
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Instructions_AR1
    TextComponent IR1
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        This is the first actual run.
        60 images will be shown for 500 milli second and the
        inter-stimulus time will be 2000 milli second

        Targets: Happy and Angry facial expressions
        Non-Targets: Neutral facial expressions

        Press Space Bar for target using your dominant
        hand's thumb.
        Respond as fast as possible without making mistakes

        Press space bar to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_TR1
    TextComponent ITR1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This is the first practise run.
        8 images will be shown for 500 milli second and the
        inter-stimulus time will be 2000 milli second

        Targets: Happy and Angry facial expressions
        Non-Targets: Neutral facial expressions

        Press Space Bar for target using your dominant
        hand's thumb.
        Respond as fast as possible without making mistakes

        Press space bar to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TR1_Image
    ImageComponent Image_TR1
      image [set every repeat] = $Image_Name
      size = (1.25, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent Key_TR1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine TR1_W
    ImageComponent Wait_TR1
      image = plus.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Instructions_TR2
    TextComponent ITR2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This is the first practise run.
        8 images will be shown for 500 milli second and the
        inter-stimulus time will be 2000 milli second

        Targets: Angry and Neutral facial expressions
        Non-Targets: Happy facial expressions

        Press Space Bar for target using your dominant
        hand's thumb.
        Respond as fast as possible without making mistakes

        Press space bar to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AR1_Image
    ImageComponent Image_AR1
      image [set every repeat] = $Image_Name
      size = (1.25, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent Key_AR1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine AR1_W
    ImageComponent Wait_AR1
      image = plus.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine TR2_Image
    ImageComponent Image_TR2
      image [set every repeat] = $Image_Name
      size = (1.25, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent Key_TR2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine TR2_W
    ImageComponent Wait_TR2
      image = plus.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Instructions_AR2
    TextComponent IRA2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This is the first actual run.
        60 images will be shown for 500 milli second and the
        inter-stimulus time will be 2000 milli second

        Targets: Angry and Neutral facial expressions
        Non-Targets: Happy facial expressions

        Press Space Bar for target using your dominant
        hand's thumb.
        Respond as fast as possible without making mistakes

        Press space bar to continue
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AR2_Image
    ImageComponent Image_AR2
      image [set every repeat] = $Image_Name
      size = (1.25, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent Key_AR2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Instructions_TR3
    TextComponent ITR3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This is the first practise run.
        8 images will be shown for 500 milli second and the
        inter-stimulus time will be 2000 milli second

        Targets: Happy and Neutral facial expressions
        Non-Targets: Angry facial expressions

        Press Space Bar for target using your dominant
        hand's thumb.
        Respond as fast as possible without making mistakes

        Press space bar to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TR3_Image
    ImageComponent Image_TR3
      image [set every repeat] = $Image_Name
      size = (1.25, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent Key_TR3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine TR3_W
    ImageComponent Wait_TR3
      image = plus.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Instructions_AR3
    TextComponent IAR3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This is the first practise run.
        60 images will be shown for 500 milli second and the
        inter-stimulus time will be 2000 milli second

        Targets: Happy and Neutral facial expressions
        Non-Targets: Angry facial expressions

        Press Space Bar for target using your dominant
        hand's thumb.
        Respond as fast as possible without making mistakes

        Press space bar to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AR3_Image
    ImageComponent Image_AR3
      image [set every repeat] = $Image_Name
      size = (1.25, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent Key_AR3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine AR2_W
    ImageComponent Wait_AR2
      image = plus.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine AR3_W
    ImageComponent Wait_AR3
      image = plus.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine End_Instructions
    TextComponent EI
      letterHeight = 0.4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        End of the experiment
Flow
  Routine Instructions
  LoopInitiator trials_7 loopType="StairHandler"
    N down = 2
    N up = 1
    loopType = staircase
    max value = 1
    min value = 0
    nReps = 2
    start value = 0.5
    step sizes = [0.8,0.8,0.4,0.4,0.2]
    step type = log
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    LoopInitiator trials_8 loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      Routine Instructions_TR1
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = Trial1.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('Image_Name', '101.jpg'), ('Emotion', 'happy'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '80.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '2.jpg'), ('Emotion', 'angry'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '180.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '151.jpg'), ('Emotion', 'happy'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '150.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '90.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '91.jpg'), ('Emotion', 'happy'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '2.jpg'), ('Emotion', 'angry'), ('Correct_Answer', None)])]
        Routine TR1_Image
        Routine TR1_W
      LoopTerminator trials
      Routine Instructions_AR1
      LoopInitiator trials_2 loopType="TrialHandler"
        conditionsFile = Actual1.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('Image_Name', '101.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '80.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', 'neutral')]),
          OrderedDict([('Image_Name', '2.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '180.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', 'neutral')]),
          OrderedDict([('Image_Name', '151.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '150.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', 'neutral')]),
          OrderedDict([('Image_Name', '90.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', 'neutral')]),
          OrderedDict([('Image_Name', '91.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '2.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '2.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '120.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', 'neutral')]),
          OrderedDict([('Image_Name', '.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '71.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '51.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '31.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '2.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')])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
        Routine AR1_Image
        Routine AR1_W
      LoopTerminator trials_2
    LoopTerminator trials_8
    LoopInitiator trials_9 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Instructions_TR2
      LoopInitiator trials_3 loopType="TrialHandler"
        conditionsFile = Trial2.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('Image_Name', '150.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '572.jpg'), ('Emotion', 'angry'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '90.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '190.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '12.jpg'), ('Emotion', 'angry'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '582.jpg'), ('Emotion', 'angry'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '462.jpg'), ('Emotion', 'angry'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '220.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '211.jpg'), ('Emotion', 'happy'), ('Correct_Answer', None)])]
        Routine TR2_Image
        Routine TR2_W
      LoopTerminator trials_3
      Routine Instructions_AR2
      LoopInitiator trials_4 loopType="TrialHandler"
        conditionsFile = Actual2.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('Image_Name', '150.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', 'neutral')]),
          OrderedDict([('Image_Name', '572.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '90.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', 'neutral')]),
          OrderedDict([('Image_Name', '190.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', 'neutral')]),
          OrderedDict([('Image_Name', '12.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '582.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '462.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '220.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', 'neutral')]),
          OrderedDict([('Image_Name', '211.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '151.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '70.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', 'neutral')]),
          OrderedDict([('Image_Name', '21.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '161.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '232.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '31.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '252.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')])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
        Routine AR2_Image
        Routine AR2_W
      LoopTerminator trials_4
    LoopTerminator trials_9
    LoopInitiator trials_10 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Instructions_TR3
      LoopInitiator trials_5 loopType="TrialHandler"
        conditionsFile = Trial3.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('Image_Name', '92.jpg'), ('Emotion', 'angry'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '161.jpg'), ('Emotion', 'happy'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '191.jpg'), ('Emotion', 'happy'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '120.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '12.jpg'), ('Emotion', 'angry'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '152.jpg'), ('Emotion', 'angry'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '100.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '582.jpg'), ('Emotion', 'angry'), ('Correct_Answer', None)]),
          OrderedDict([('Image_Name', '101.jpg'), ('Emotion', 'happy'), ('Correct_Answer', None)])]
        Routine TR3_Image
        Routine TR3_W
      LoopTerminator trials_5
      Routine Instructions_AR3
      LoopInitiator trials_6 loopType="TrialHandler"
        conditionsFile = Actual3.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('Image_Name', '92.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '161.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '191.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '120.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', 'neutral')]),
          OrderedDict([('Image_Name', '12.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '152.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '100.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', 'neutral')]),
          OrderedDict([('Image_Name', '582.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '101.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '11.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '31.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '202.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '150.jpg'), ('Emotion', 'neutral'), ('Correct_Answer', 'neutral')]),
          OrderedDict([('Image_Name', '191.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')]),
          OrderedDict([('Image_Name', '252.jpg'), ('Emotion', 'angry'), ('Correct_Answer', 'angry')]),
          OrderedDict([('Image_Name', '101.jpg'), ('Emotion', 'happy'), ('Correct_Answer', 'happy')])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
        Routine AR3_Image
        Routine AR3_W
      LoopTerminator trials_6
    LoopTerminator trials_10
  LoopTerminator trials_7
  Routine End_Instructions
